/vis/disable

/gate/geometry/setMaterialDatabase GateMaterials.db

#     W O R L D
/gate/world/geometry/setXLength 30. cm
/gate/world/geometry/setYLength 30. cm
/gate/world/geometry/setZLength 30. cm

/control/execute camera.mac

/control/execute phantom.mac
#/control/execute phantom_norm.mac

/control/execute physics.mac

/gate/actor/addActor                             SimulationStatisticActor stat
/gate/actor/stat/saveEveryNSeconds               20
/gate/actor/stat/save                            stat/cylpet_example.txt

#	I N I T I A L I Z E 
/gate/run/initialize

/control/execute digitizer.mac

#	S O U R C E
/control/execute sources.mac
#/control/execute sources_norm.mac



#	V E R B O S I T Y
#/gate/verbose Physic    0
#/gate/verbose Cuts      0
#/gate/verbose Actor     0
#/gate/verbose SD        0
#/gate/verbose Actions   0
#/gate/verbose Step      0
#/gate/verbose Error     0
#/gate/verbose Warning   0
#/gate/verbose Output    0
#/gate/verbose Core      0

/run/verbose 0
/event/verbose 0
/tracking/verbose 0

#	O U T P U T 

#root
/gate/output/root/enable
/gate/output/root/setFileName output/example_PET_15min
#/gate/output/root/setFileName output/norm_PET_120min
/gate/output/root/setRootHitFlag 0
/gate/output/root/setRootSinglesFlag 0
/gate/output/root/setRootCoincidencesFlag 1
/gate/output/root/setRootdelayFlag 1

#lmf
/gate/output/lmf/enable
/gate/output/lmf/setFileName              output/example_PET_15min
/gate/output/lmf/setFileName              norm/norm2_PET_120min
/gate/output/lmf/setDetectorIDBool        1
/gate/output/lmf/setEnergyBool            1
/gate/output/lmf/setGantryAxialPosBool    0
/gate/output/lmf/setGantryAngularPosBool  0
/gate/output/lmf/setSourcePosBool         0
/gate/output/lmf/setNeighbourBool         0
/gate/output/lmf/setNeighbourhoodOrder    0
/gate/output/lmf/setCoincidenceBool       0
/gate/output/lmf/setGateDigiBool          1 
/gate/output/lmf/setComptonBool           1 
/gate/output/lmf/setSourceIDBool          0
/gate/output/lmf/setSourceXYZPosBool      1
/gate/output/lmf/setGlobalXYZPosBool      0
/gate/output/lmf/setEventIDBool           1
/gate/output/lmf/setRunIDBool             0

#ascii
/gate/output/ascii/enable
/gate/output/ascii/setFileName                 output/example_PET_15min
#/gate/output/ascii/setFileName                 norm/norm2_PET_120min
/gate/output/ascii/setOutFileHitsFlag           0
/gate/output/ascii/setOutFileSinglesFlag        0
/gate/output/ascii/setOutFileCoincidencesFlag   1
/gate/output/ascii/setOutFiledelayFlag          1
/gate/output/ascii/setCoincidenceMask 0 1 0 1 1 1 1 0 0 0 0 1 1 0 0 0 0 0 0 1 0 1 1 1 1 0 0 0 0 1 1 0 0 0 0 0 
#/gate/output/ascii/setCoincidenceMask 0 1 0 1 1 1 1 1 0 0 0 1 1 1 1 1 0 0 0 1 0 1 1 1 1 1 0 0 0 1 1 1 1 1 0 0 


#   R A N D O M
# JamesRandom Ranlux64 MersenneTwister
/gate/random/setEngineName MersenneTwister
#/gate/random/setEngineSeed default
#/gate/random/setEngineSeed auto
/gate/random/setEngineSeed 123456789
#/gate/random/resetEngineFrom fileName
/gate/random/verbose 1

#	S T A R T 
/gate/application/setTimeSlice     900. s
/gate/application/setTimeStart     0. s
/gate/application/setTimeStop      900. s

/gate/application/startDAQ
